PsychoPy2experiment version="2022.2.5"
Settings
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  expName = bestworst_trial
  keyboardBackend = ioHub
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Routines
  Routine bestworst_trial
    SliderComponent radio_left
      color = 0.0000, 0.0000, 0.0000
      flip = True
      forceEndRoutine = False
      granularity = 1
      labels = (1, 2, 3, 4)
      letterHeight = 0.05
      ori = 270
      pos = [-0.5, -0.2]
      saveStartStop = False
      size = [0.3, 0.05]
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = radio
      ticks = (1, 2, 3, 4)
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    SliderComponent radio_right
      color = 0.0000, 0.0000, 0.0000
      flip = True
      forceEndRoutine = False
      granularity = 1
      labels = (1, 2, 3, 4)
      letterHeight = 0.05
      ori = 270
      pos = [0.5, -0.2]
      saveStartStop = False
      size = [0.3, 0.05]
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = radio
      ticks = (1, 2, 3, 4)
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    CodeComponent linking_sliders_code
      Code Type = Auto->JS
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      Each Frame:
        left_slider_choice = radio_left.getRating()
        right_slider_choice = radio_right.getRating()

        if len(radio_left.getHistory()) > 0 and len(radio_right.getHistory()) > 0:
            left_last_choice_time = radio_left.getHistory()[-1][1]
            right_last_choice_time = radio_right.getHistory()[-1][1]

            if left_slider_choice == right_slider_choice:
                # check whether right radio was interacted with last
                if right_last_choice_time > left_last_choice_time:
                    radio_left.reset()
                    radio_right.reset()
                    radio_right.recordRating(right_slider_choice)
                else:
                    radio_right.reset()
                    radio_left.reset()
                    radio_left.recordRating(left_slider_choice)
    ButtonComponent next_button_trials
      bold = True
      fillColor = [0.55, 0.55, 0.55]
      forceEndRoutine = False
      letterHeight = 0.025
      oncePerClick = False
      pos = [0.77, -0.44]
      size = [0.2, 0.1]
      startVal [time (s)] = 0
      text = Volgende >>
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      callback:
        if radio_right.getRating() and radio_left.getRating():
             next_button_clicked = True
    CodeComponent nextbutton_trials_code
      Code Type = Auto->JS
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      Begin Routine:
        next_button_clicked = False

        next_button_trials.fillColor = (0.55, 0.55, 0.55)
        next_button_trials.updateColors()
      Each Frame:
        # make button standard color be grey, turn green
        # when both radio buttons have an answer

        if radio_right.getRating() and radio_left.getRating():
            next_button_trials.fillColor = (0.12, 0.45, -0.14)
            next_button_trials.updateColors()
            if next_button_clicked == True:
                continueRoutine = False
            else:
                pass
        else:
            next_button_trials.fillColor = (0.55, 0.55, 0.55)
            next_button_trials.updateColors()
      End Routine:
        next_button_clicked = False
    TextComponent instruction_text
      letterHeight = 0.05
      pos = [0, 0.35]
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.3
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      text:
        Welke van de vier                   associeer je het MINSTE
        en het MEESTE met
    TextboxComponent wordtype_var_text
      alignment = center-left
      anchor = center-left
      autoLog = False
      bold = True
      editable = False
      letterHeight = 0.05
      pos = [-0.18, 0.385]
      saveStartStop = False
      size = [0.1, 0.1]
      startVal [time (s)] = 0.0
      text [set every repeat] = $wordtype
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    TextboxComponent association_var_text
      alignment = center-left
      anchor = center-left
      autoLog = False
      bold = True
      editable = False
      letterHeight = 0.05
      pos = [0.07, 0.316]
      saveStartStop = False
      size = 0.3
      startVal [time (s)] = 0.0
      text [set every repeat] = $association
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    PolygonComponent line_below
      fillColor = 1,1,1
      lineColor = 1,1,1
      pos = (-0.7, -0.4)
      saveStartStop = False
      shape = line
      size = [1.3, 0.2]
      startVal [time (s)] = 0.0
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    PolygonComponent line_above
      fillColor = $[0,0,0] 
      lineColor = $[0,0,0]
      pos = (-0.7, -0.4)
      saveStartStop = False
      shape = line
      size = [0.7, 0.2]
      startVal [time (s)] = 0.0
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    PolygonComponent line_above_2
      fillColor = $[0,0,0] 
      lineColor = $[0,0,0]
      pos = (-0.7, -0.4)
      saveStartStop = False
      shape = line
      size = [0.7, 0.2]
      startVal [time (s)] = 0.0
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    PolygonComponent line_above_3
      fillColor = $[0,0,0] 
      lineColor = $[0,0,0]
      pos = (-0.7, -0.4)
      saveStartStop = False
      shape = line
      size = [0.7, 0.2]
      startVal [time (s)] = 0.0
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    PolygonComponent line_above_4
      fillColor = $[0,0,0] 
      lineColor = $[0,0,0]
      pos = (-0.7, -0.4)
      saveStartStop = False
      shape = line
      size = [0.7, 0.2]
      startVal [time (s)] = 0.0
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    TextboxComponent minst_text
      autoLog = False
      bold = True
      editable = False
      letterHeight = 0.05
      pos = (-0.5, 0.05)
      saveStartStop = False
      size = (None, None)
      startVal [time (s)] = 0.0
      text = Minste
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    TextboxComponent meest_text
      autoLog = False
      bold = True
      editable = False
      letterHeight = 0.05
      pos = (0.5, 0.05)
      saveStartStop = False
      size = (None, None)
      startVal [time (s)] = 0.0
      text = Meeste
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    TextComponent word1_var_text
      letterHeight = 0.05
      pos = (0, -.04)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $word1
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    TextComponent word2_var_text
      letterHeight = 0.05
      pos = (0, -0.14)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $word2
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    TextComponent word3_var_text
      letterHeight = 0.05
      pos = (0, -.24)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $word3
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    TextComponent word4_var_text
      letterHeight = 0.05
      pos = (0, -.34)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $word4
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  Routine stimuli_loader
  Routine stimuli_block_creator
  Routine selftimed_pause
    CodeComponent selftimed_pause_code
      Code Type = Auto->JS
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      Begin Routine:
        if wordtype_instructions == 'voornamen':
            continueRoutine = False
        else:
            pass
    TextComponent selftimed_pause_text
      letterHeight = 0.05
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        Soms kan een survey invullen erg vermoeiend werken. Om vermoeidheid tegen te gaan bieden we hier de mogelijkheid om een pauze te nemen. Deze pauze kan zo lang duren als je zelf wilt en het is voor dit experiment toegestaan om tijdens deze pauzes je telefoon er bij te pakken.

        Om door te gaan naar de rest van het experiment, klik op de 'volgende'-knop.
    ButtonComponent next_button_selftimed_pause
      bold = True
      fillColor = [0.12, 0.45, -0.14]
      forceEndRoutine = False
      letterHeight = 0.025
      oncePerClick = False
      pos = [0.77, -0.44]
      save = none
      saveStartStop = False
      size = [0.2, 0.1]
      startVal [time (s)] = 0
      text = Volgende >>
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      callback:
        continueRoutine = False
  Routine block_instructions
    TextComponent block_instruction_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        Je krijgt straks [hoeveelheid] sets van 4                              te zien. Verder is er aan iedere set een specifieke associatie verbonden. Voor iedere set van 4                              vragen we je om aan te geven welke je hiervan het MEESTE en het MINSTE vind passen bij de associatie.

        Op de volgende pagina zal er een voorbeeld gepresenteerd worden, waarbij je de verschillende knoppen uit kan proberen om te zien hoe het precies werkt. Hierna volgen de echte vragen die bij het experiment horen.
    ButtonComponent next_button_block_instructions
      bold = True
      callback = continueRoutine = False
      fillColor = [0.12, 0.45, -0.14]
      forceEndRoutine = False
      letterHeight = 0.025
      pos = [0.77, -0.44]
      save = none
      saveStartStop = False
      size = [0.2, 0.1]
      startVal [time (s)] = 0
      text = Volgende >>
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    TextboxComponent wordtype_textbox_instruction_block_1
      alignment = center-left
      anchor = center-left
      autoLog = False
      bold = True
      editable = False
      letterHeight = 0.05
      pos = (0.182, 0.309)
      saveStartStop = False
      size = (None, None)
      startVal [time (s)] = 0.0
      text [set every repeat] = $wordtype_instructions
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    TextboxComponent wordtype_textbox_instruction_block_2
      alignment = center-left
      anchor = center-left
      autoLog = False
      bold = True
      editable = False
      letterHeight = 0.05
      pos = (-.208, 0.172)
      saveStartStop = False
      size = (None, None)
      startVal [time (s)] = 0.0
      text [set every repeat] = $wordtype_instructions
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  Routine block_selector
    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        print(blocks)
  Routine pause_tenthsecond
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
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Flow
  Routine stimuli_loader
  Routine stimuli_block_creator
  LoopInitiator wordtype_block loopType="TrialHandler"
    conditionsFile = bestworst_example_trials_blocks.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [{'blocks': 'bestworst_example_trials_people.xlsx', 'wordtype_instructions': 'voornamen'},
      {'blocks': 'bestworst_example_trials_companies.xlsx', 'wordtype_instructions': 'bedrijfsnamen'},
      {'blocks': 'bestworst_example_trials_nonwords.xlsx', 'wordtype_instructions': 'nepwoorden'}]
    Routine selftimed_pause
    Routine pause_tenthsecond
    Routine block_instructions
    LoopInitiator within_block_trials loopType="TrialHandler"
      conditionsFile = $blocks
      loopType = sequential
      nReps = 1
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      Routine bestworst_trial
      Routine pause_tenthsecond
    LoopTerminator within_block_trials
    Routine pause_tenthsecond
  LoopTerminator wordtype_block
