PsychoPy2experiment version="2022.2.5"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1680, 1050]
  expName = word_norms_survey
  keyboardBackend = ioHub
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Routines
  Routine bestworst_trial
    SliderComponent radio_left
      color = 0.0000, 0.0000, 0.0000
      forceEndRoutine = False
      granularity = 1
      labels = (1, 2, 3, 4)
      letterHeight = 0.05
      ori = 270
      pos = [-0.5, -0.2]
      saveStartStop = False
      size = [0.3, 0.05]
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = radio
      ticks = (1, 2, 3, 4)
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    SliderComponent radio_right
      color = 0.0000, 0.0000, 0.0000
      forceEndRoutine = False
      granularity = 1
      labels = (1, 2, 3, 4)
      letterHeight = 0.05
      ori = 270
      pos = [0.5, -0.2]
      saveStartStop = False
      size = [0.3, 0.05]
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = radio
      ticks = (1, 2, 3, 4)
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    CodeComponent linking_sliders_code
      Code Type = Auto->JS
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      Each Frame:
        left_slider_choice = radio_left.getRating()
        right_slider_choice = radio_right.getRating()

        if len(radio_left.getHistory()) > 0 and len(radio_right.getHistory()) > 0:
            left_last_choice_time = radio_left.getHistory()[-1][1]
            right_last_choice_time = radio_right.getHistory()[-1][1]

            if left_slider_choice == right_slider_choice:
                # check whether right radio was interacted with last
                if right_last_choice_time > left_last_choice_time:
                    radio_left.reset()
                    radio_right.reset()
                    radio_right.recordRating(right_slider_choice)
                else:
                    radio_right.reset()
                    radio_left.reset()
                    radio_left.recordRating(left_slider_choice)
    ButtonComponent next_button_trials
      bold = True
      fillColor = [0.55, 0.55, 0.55]
      forceEndRoutine = False
      letterHeight = 0.025
      pos = [0.685, -0.44]
      save = none
      saveStartStop = False
      size = [0.2, 0.1]
      startVal [time (s)] = 0
      text = Volgende >>
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      callback:
        if radio_right.getRating() and radio_left.getRating():
             next_button_clicked = True
    CodeComponent nextbutton_trials_code
      Code Type = Auto->JS
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      Begin Routine:
        next_button_clicked = False

        next_button_trials.fillColor = (0.55, 0.55, 0.55)
        next_button_trials.updateColors()
      Each Frame:
        # make button standard color be grey, turn green
        # when both radio buttons have an answer

        if radio_right.getRating() and radio_left.getRating():
            next_button_trials.fillColor = (0.12, 0.45, -0.14)
            next_button_trials.updateColors()
            if next_button_clicked == True:
                continueRoutine = False
            else:
                pass
        else:
            next_button_trials.fillColor = (0.55, 0.55, 0.55)
            next_button_trials.updateColors()
      End Routine:
        next_button_clicked = False
    TextComponent instruction_text
      letterHeight = 0.05
      pos = [0, 0.35]
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Welke van de vier                               associeer je het MINSTE en het MEESTE met het eigenschap                                 
      wrapWidth = 1.5
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    TextboxComponent wordtype_var_text
      alignment = center-left
      anchor = center-left
      autoLog = False
      bold = True
      editable = False
      letterHeight = 0.05
      pos = [-0.305, 0.381]
      saveStartStop = False
      size = [0.1, 0.1]
      startVal [time (s)] = 0.0
      text [set every repeat] = $wordtype
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    TextboxComponent association_var_text
      alignment = center-left
      anchor = center-left
      autoLog = False
      bold = True
      editable = False
      letterHeight = 0.05
      pos = [0.155, 0.3245]
      saveStartStop = False
      size = 0.3
      startVal [time (s)] = 0.0
      text [set every repeat] = $association
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    PolygonComponent line_below
      fillColor = 1,1,1
      lineColor = 1,1,1
      pos = (-0.7, -0.4)
      saveStartStop = False
      shape = line
      size = [1.3, 0.2]
      startVal [time (s)] = 0.0
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    PolygonComponent line_above
      fillColor = $[0,0,0] 
      lineColor = $[0,0,0]
      pos = (-0.7, -0.4)
      saveStartStop = False
      shape = line
      size = [0.7, 0.2]
      startVal [time (s)] = 0.0
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    PolygonComponent line_above_2
      fillColor = $[0,0,0] 
      lineColor = $[0,0,0]
      pos = (-0.7, -0.4)
      saveStartStop = False
      shape = line
      size = [0.7, 0.2]
      startVal [time (s)] = 0.0
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    PolygonComponent line_above_3
      fillColor = $[0,0,0] 
      lineColor = $[0,0,0]
      pos = (-0.7, -0.4)
      saveStartStop = False
      shape = line
      size = [0.7, 0.2]
      startVal [time (s)] = 0.0
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    PolygonComponent line_above_4
      fillColor = $[0,0,0] 
      lineColor = $[0,0,0]
      pos = (-0.7, -0.4)
      saveStartStop = False
      shape = line
      size = [0.7, 0.2]
      startVal [time (s)] = 0.0
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    TextboxComponent minst_text
      autoLog = False
      bold = True
      editable = False
      letterHeight = 0.05
      pos = (-0.5, 0.05)
      saveStartStop = False
      size = (None, None)
      startVal [time (s)] = 0.0
      text = Minste
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    TextboxComponent meest_text
      autoLog = False
      bold = True
      editable = False
      letterHeight = 0.05
      pos = (0.5, 0.05)
      saveStartStop = False
      size = (None, None)
      startVal [time (s)] = 0.0
      text = Meeste
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    TextComponent word1_var_text
      letterHeight = 0.05
      pos = (0, -.34)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $option1
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    TextComponent word2_var_text
      letterHeight = 0.05
      pos = (0, -0.24)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $option2
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    TextComponent word3_var_text
      letterHeight = 0.05
      pos = (0, -.14)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $option3
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    TextComponent word4_var_text
      letterHeight = 0.05
      pos = (0, -.04)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $option4
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    CodeComponent saving_variables_code
      Code Type = Auto->JS
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      End Routine:
        # creating a word list with the four trial words
        word_list = [option1, option2, option3, option4]

        # acquiring the best and worst words using the
        # ratings from the radio buttons (-1 because the
        # radio buttons count from 1)
        worst = word_list[int(radio_left.getRating() - 1)]
        best = word_list[int(radio_right.getRating() - 1)]

        # add data to the excel sheet
        thisExp.addData('worst', worst)
        thisExp.addData('best', best)
    CodeComponent progress_tracker_code
      Code Type = Auto->JS
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      Begin Routine:
        progress = within_block_trials.thisN + 1

        print(progress)
    TextboxComponent progess_tracker_variable_text
      anchor = center-right
      autoLog = False
      bold = False
      editable = False
      letterHeight = 0.05
      pos = (-0.36, -0.47)
      saveStartStop = False
      size = (None, None)
      startVal [time (s)] = 0.0
      text [set every repeat] = $(progress+1)
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    TextboxComponent progress_tracker_text
      anchor = center-left
      autoLog = False
      bold = False
      editable = False
      letterHeight = 0.05
      pos = (-1.08, -0.47)
      saveStartStop = False
      size = (None, None)
      startVal [time (s)] = 0.0
      text = / 65
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    CodeComponent blinking_bw_trial_code
      Code Type = Auto->JS
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      Begin Routine:
        timer = core.CountdownTimer(7)
      Each Frame:
        if timer.getTime() < 0.5:
            if round(timer.getTime()) % 2 == 0:
                blink_line_up_bw.opacity = 1
                blink_line_down_bw.opacity = 1
                blink_line_left_bw.opacity = 1
                blink_line_right_bw.opacity = 1
                blink_line_up_bw.updateOpacity()
                blink_line_down_bw.updateOpacity()
                blink_line_left_bw.updateOpacity()
                blink_line_right_bw.updateOpacity()
            else:
                blink_line_up_bw.opacity = 0
                blink_line_down_bw.opacity = 0
                blink_line_left_bw.opacity = 0
                blink_line_right_bw.opacity = 0
                blink_line_up_bw.updateOpacity()
                blink_line_down_bw.updateOpacity()
                blink_line_left_bw.updateOpacity()
                blink_line_right_bw.updateOpacity()
      End Routine:
        # reset blinkers
        blink_line_up_bw.opacity = 0
        blink_line_down_bw.opacity = 0
        blink_line_left_bw.opacity = 0
        blink_line_right_bw.opacity = 0
        blink_line_up_bw.updateOpacity()
        blink_line_down_bw.updateOpacity()
        blink_line_left_bw.updateOpacity()
        blink_line_right_bw.updateOpacity()
    PolygonComponent blink_line_up_bw
      fillColor = white
      opacity [set every repeat] = 0
      pos = (0.685, -.3875)
      saveStartStop = False
      shape = rectangle
      size = [0.21, 0.005]
      startVal [time (s)] = 0
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    PolygonComponent blink_line_down_bw
      fillColor = white
      opacity [set every repeat] = 0
      pos = (0.685, -.4925)
      saveStartStop = False
      shape = rectangle
      size = [0.21, 0.005]
      startVal [time (s)] = 0
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    PolygonComponent blink_line_left_bw
      fillColor = white
      opacity [set every repeat] = 0
      pos = (0.5825, -.44)
      saveStartStop = False
      shape = rectangle
      size = [0.005, 0.105]
      startVal [time (s)] = 0
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    PolygonComponent blink_line_right_bw
      fillColor = white
      opacity [set every repeat] = 0
      pos = (0.7875, -.44)
      saveStartStop = False
      shape = rectangle
      size = [0.005, 0.105]
      startVal [time (s)] = 0
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    CodeComponent saving_trial_response_time_code
      Code Type = Auto->JS
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      Begin Routine:
        trial_timer = core.MonotonicClock()
      End Routine:
        thisExp.addData('trial_response_time', trial_timer.getTime())
  Routine stimuli_loader
  Routine selftimed_pause
    CodeComponent selftimed_pause_code
      Code Type = Auto->JS
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      Begin Routine:
        if wordtype_instructions == 'nepwoorden':
            continueRoutine = False
        elif wordtype_instructions == 'bedrijfsnamen':
            selftimed_pause_1 = core.MonotonicClock()
        elif wordtype_instructions == 'namen':
            selftimed_pause_2 = core.MonotonicClock()
        else:
            pass

        if selftimed_pause_mouse.getPressed()[0] == 1:
            next_button_selftimed_pause.fillColor = (0.55, 0.55, 0.55)
            next_button_selftimed_pause.updateColors()
            ability_to_click_next = False
      Each Frame:
        if selftimed_pause_mouse.getPressed()[0] == 0:
            next_button_selftimed_pause.fillColor = (0.12, 0.45, -0.14)
            next_button_selftimed_pause.updateColors()
            ability_to_click_next = True
      End Routine:
        if 'selftimed_pause_1' in globals():
            thisExp.nextEntry()
            thisExp.addData('selftimed_pause_1_duration', selftimed_pause_1.getTime())
            del selftimed_pause_1

        if 'selftimed_pause_2' in globals():
            thisExp.nextEntry()
            thisExp.addData('selftimed_pause_2_duration', selftimed_pause_2.getTime())
            del selftimed_pause_2
    TextComponent selftimed_pause_text
      letterHeight = 0.05
      pos = (0, 0.06)
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        Soms kan een survey invullen erg vermoeiend werken. Om vermoeidheid tegen te gaan bieden we hier de mogelijkheid om een pauze te nemen.

        Deze pauze kan zo lang duren als je zelf wilt en het is toegestaan om te doen waar je zelf zin in hebt.

        Om door te gaan naar de rest van het experiment, klik op de 'volgende'-knop.
    ButtonComponent next_button_selftimed_pause
      bold = True
      fillColor = [0.12, 0.45, -0.14]
      forceEndRoutine = False
      letterHeight = 0.025
      pos = [0.685, -0.44]
      save = none
      saveStartStop = False
      size = [0.2, 0.1]
      startVal [time (s)] = 0
      text = Volgende >>
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      callback:
        if ability_to_click_next == True:
         continueRoutine = False
    MouseComponent selftimed_pause_mouse
      forceEndRoutineOnPress = never
      saveMouseState = on click
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine block_instructions
    TextComponent block_instruction_text
      letterHeight = 0.05
      pos = (0, 0.116)
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.6
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      text:
        Je krijgt straks 65 verschillende sets van 4                               te zien. Verder geldt er voor iedere individuele set een specifieke, willekeurig
        gekozen associatie. Voor iedere unieke set van 4                              ,
        vragen we je om aan te geven welke je hiervan het MEESTE en het MINSTE vind passen bij de associatie.

        Let op: de associaties worden willekeurig gekozen, lees deze dus goed voor het beantwoorden van de vragen.
    ButtonComponent next_button_block_instructions
      bold = True
      fillColor = [0.12, 0.45, -0.14]
      forceEndRoutine = False
      letterHeight = 0.025
      pos = [0.685, -0.44]
      save = none
      saveStartStop = False
      size = [0.2, 0.1]
      startVal [time (s)] = 0
      text = Volgende >>
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      callback:
        if ability_to_click_next == True:
         continueRoutine = False
    TextboxComponent wordtype_textbox_instruction_block_1
      alignment = center-left
      anchor = center-left
      autoLog = False
      bold = True
      editable = False
      letterHeight = 0.05
      pos = (0.181, 0.3204)
      saveStartStop = False
      size = (None, None)
      startVal [time (s)] = 0.0
      text [set every repeat] = $wordtype_instructions
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    TextboxComponent wordtype_textbox_instruction_block_2
      alignment = center-left
      anchor = center-left
      autoLog = False
      bold = True
      editable = False
      letterHeight = 0.05
      pos = (.345, 0.2038)
      saveStartStop = False
      size = (None, None)
      startVal [time (s)] = 0.0
      text [set every repeat] = $wordtype_instructions
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    MouseComponent block_instr_mouse
      forceEndRoutineOnPress = never
      saveMouseState = on click
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent block_instr_code
      Code Type = Auto->JS
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      Begin Routine:
        if block_instr_mouse.getPressed()[0] == 1:
            next_button_block_instructions.fillColor = (0.55, 0.55, 0.55)
            next_button_block_instructions.updateColors()
            ability_to_click_next = False
      Each Frame:
        if block_instr_mouse.getPressed()[0] == 0:
            next_button_block_instructions.fillColor = (0.12, 0.45, -0.14)
            next_button_block_instructions.updateColors()
            ability_to_click_next = True
  Routine block_selector
    CodeComponent block_selection_code
      Code Type = Auto->JS
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      Begin Experiment:
        p_num = int(expInfo['participant'])

        block_size = 64

        row_start = (p_num-1) * block_size
        row_end = ((p_num-1) * block_size) + block_size
        trial_rows = str(row_start) + ':' + str(row_end)
  Routine pause_tenthsecond
    TextComponent text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
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  Routine example_trial_instructions
    TextComponent example_trial_instruction_text
      letterHeight = 0.05
      pos = (0, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        In deze survey zal je drie blokken met elk 65 vragen te zien krijgen, met tussendoor een pauze. Elke individuele vraag betreft vier woorden of namen waaruit je één minst en één meest passende optie moet kiezen voor een willekeurige associatie. Let dus goed op bij iedere nieuwe vraag welke associatie willekeurig gekozen is.

        We zijn op zoek naar instinctuele associaties met de woorden, geef daarom zo snel mogelijk antwoord en probeer de vragen niet te over analyseren. Er zijn geen correcte of foute antwoorden, het zijn je gevoelens over de woorden waar we benieuwd naar zijn.
    ButtonComponent next_button_example_trial_instructions
      bold = True
      fillColor = [0.12, 0.45, -0.14]
      forceEndRoutine = False
      letterHeight = 0.025
      pos = [0.685, -0.44]
      save = none
      saveStartStop = False
      size = [0.2, 0.1]
      startVal [time (s)] = 0.01
      text = Volgende >>
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      callback:
        if ability_to_click_next == True:
         continueRoutine = False
    CodeComponent ex_trial_inst_code
      Code Type = Auto->JS
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      Begin Routine:
        if ex_trial_inst_mouse.getPressed()[0] == 1:
            next_button_example_trial_instructions.fillColor = (0.55, 0.55, 0.55)
            next_button_example_trial_instructions.updateColors()
            ability_to_click_next = False
      Each Frame:
        if ex_trial_inst_mouse.getPressed()[0] == 0:
            next_button_example_trial_instructions.fillColor = (0.12, 0.45, -0.14)
            next_button_example_trial_instructions.updateColors()
            ability_to_click_next = True
    MouseComponent ex_trial_inst_mouse
      forceEndRoutineOnPress = never
      saveMouseState = on click
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine example_trial
    SliderComponent radio_left_ex
      color = 0.0000, 0.0000, 0.0000
      flip = True
      forceEndRoutine = False
      granularity = 1
      labels = (1, 2, 3, 4)
      letterHeight = 0.05
      ori = 270
      pos = [-0.5, -0.2]
      saveStartStop = False
      size = [0.3, 0.05]
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = radio
      ticks = (1, 2, 3, 4)
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    SliderComponent radio_right_ex
      color = 0.0000, 0.0000, 0.0000
      flip = True
      forceEndRoutine = False
      granularity = 1
      labels = (1, 2, 3, 4)
      letterHeight = 0.05
      ori = 270
      pos = [0.5, -0.2]
      saveStartStop = False
      size = [0.3, 0.05]
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = radio
      ticks = (1, 2, 3, 4)
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    CodeComponent linking_sliders_code_ex
      Code Type = Auto->JS
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      Each Frame:
        left_slider_choice = radio_left_ex.getRating()
        right_slider_choice = radio_right_ex.getRating()

        if len(radio_left_ex.getHistory()) > 0 and len(radio_right_ex.getHistory()) > 0:
            left_last_choice_time = radio_left_ex.getHistory()[-1][1]
            right_last_choice_time = radio_right_ex.getHistory()[-1][1]

            if left_slider_choice == right_slider_choice:
                # check whether right radio was interacted with last
                if right_last_choice_time > left_last_choice_time:
                    radio_left_ex.reset()
                    radio_right_ex.reset()
                    radio_right_ex.recordRating(right_slider_choice)
                else:
                    radio_right_ex.reset()
                    radio_left_ex.reset()
                    radio_left_ex.recordRating(left_slider_choice)
    ButtonComponent next_button_trials_ex
      bold = True
      fillColor = [0.55, 0.55, 0.55]
      forceEndRoutine = False
      letterHeight = 0.025
      pos = [0.685, -0.44]
      save = none
      saveStartStop = False
      size = [0.2, 0.1]
      startVal [time (s)] = 0
      text = Volgende >>
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      callback:
        if radio_right_ex.getRating() and radio_left_ex.getRating():
             next_button_clicked = True
    CodeComponent nextbutton_trials_code_ex
      Code Type = Auto->JS
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      Begin Routine:
        next_button_clicked = False

        next_button_trials_ex.fillColor = (0.55, 0.55, 0.55)
        next_button_trials_ex.updateColors()
      Each Frame:
        # make button standard color be grey, turn green
        # when both radio buttons have an answer

        if radio_right_ex.getRating() and radio_left_ex.getRating():
            next_button_trials_ex.fillColor = (0.12, 0.45, -0.14)
            next_button_trials_ex.updateColors()
            if next_button_clicked == True:
                continueRoutine = False
            else:
                pass
        else:
            next_button_trials_ex.fillColor = (0.55, 0.55, 0.55)
            next_button_trials_ex.updateColors()
      End Routine:
        next_button_clicked = False
    TextComponent instruction_text_ex
      letterHeight = 0.05
      pos = [0, 0.35]
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Welke van de vier                   associeer je het MINSTE en het MEESTE met het eigenschap                                 
      wrapWidth = 1.5
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    TextboxComponent wordtype_var_text_ex
      alignment = center-left
      anchor = center-left
      autoLog = False
      bold = True
      editable = False
      letterHeight = 0.05
      pos = [-0.275, 0.381]
      saveStartStop = False
      size = [0.1, 0.1]
      startVal [time (s)] = 0.0
      text [set every repeat] = woorden
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    TextboxComponent association_var_text_ex
      alignment = center-left
      anchor = center-left
      autoLog = False
      bold = True
      editable = False
      letterHeight = 0.05
      pos = [0.11, 0.3245]
      saveStartStop = False
      size = 0.3
      startVal [time (s)] = 0.0
      text [set every repeat] = slecht
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    PolygonComponent line_below_ex
      fillColor = 1,1,1
      lineColor = 1,1,1
      pos = (-0.7, -0.4)
      saveStartStop = False
      shape = line
      size = [1.3, 0.2]
      startVal [time (s)] = 0.0
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    PolygonComponent line_above_ex
      fillColor = $[0,0,0] 
      lineColor = $[0,0,0]
      pos = (-0.7, -0.4)
      saveStartStop = False
      shape = line
      size = [0.7, 0.2]
      startVal [time (s)] = 0.0
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    PolygonComponent line_above_2_ex
      fillColor = $[0,0,0] 
      lineColor = $[0,0,0]
      pos = (-0.7, -0.4)
      saveStartStop = False
      shape = line
      size = [0.7, 0.2]
      startVal [time (s)] = 0.0
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    PolygonComponent line_above_3_ex
      fillColor = $[0,0,0] 
      lineColor = $[0,0,0]
      pos = (-0.7, -0.4)
      saveStartStop = False
      shape = line
      size = [0.7, 0.2]
      startVal [time (s)] = 0.0
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    PolygonComponent line_above_4_ex
      fillColor = $[0,0,0] 
      lineColor = $[0,0,0]
      pos = (-0.7, -0.4)
      saveStartStop = False
      shape = line
      size = [0.7, 0.2]
      startVal [time (s)] = 0.0
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    TextboxComponent minst_text_ex
      autoLog = False
      bold = True
      editable = False
      letterHeight = 0.05
      pos = (-0.5, 0.05)
      saveStartStop = False
      size = (None, None)
      startVal [time (s)] = 0.0
      text = Minste
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    TextboxComponent meest_text_ex
      autoLog = False
      bold = True
      editable = False
      letterHeight = 0.05
      pos = (0.5, 0.05)
      saveStartStop = False
      size = (None, None)
      startVal [time (s)] = 0.0
      text = Meeste
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    TextComponent word1_var_text_ex
      letterHeight = 0.05
      pos = (0, -.04)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $option1
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    TextComponent word2_var_text_ex
      letterHeight = 0.05
      pos = (0, -0.14)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $option2
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    TextComponent word3_var_text_ex
      letterHeight = 0.05
      pos = (0, -.24)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $option3
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    TextComponent word4_var_text_ex
      letterHeight = 0.05
      pos = (0, -.34)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        $option4
    CodeComponent blinking_ex_trial_code
      Code Type = Auto->JS
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      Begin Experiment:
        total_time_exp = 0
      Begin Routine:
        timer = core.CountdownTimer(7)

        time_tracker = core.MonotonicClock()
      Each Frame:
        if timer.getTime() < 0.5:
            if round(timer.getTime()) % 2 == 0:
                blink_line_up_ex.opacity = 1
                blink_line_down_ex.opacity = 1
                blink_line_left_ex.opacity = 1
                blink_line_right_ex.opacity = 1
                blink_line_up_ex.updateOpacity()
                blink_line_down_ex.updateOpacity()
                blink_line_left_ex.updateOpacity()
                blink_line_right_ex.updateOpacity()
            else:
                blink_line_up_ex.opacity = 0
                blink_line_down_ex.opacity = 0
                blink_line_left_ex.opacity = 0
                blink_line_right_ex.opacity = 0
                blink_line_up_ex.updateOpacity()
                blink_line_down_ex.updateOpacity()
                blink_line_left_ex.updateOpacity()
                blink_line_right_ex.updateOpacity()
      End Routine:
        total_time_exp += time_tracker.getTime()

        # reset blinkers
        blink_line_up_ex.opacity = 0
        blink_line_down_ex.opacity = 0
        blink_line_left_ex.opacity = 0
        blink_line_right_ex.opacity = 0
        blink_line_up_ex.updateOpacity()
        blink_line_down_ex.updateOpacity()
        blink_line_left_ex.updateOpacity()
        blink_line_right_ex.updateOpacity()
    PolygonComponent blink_line_up_ex
      fillColor = white
      opacity = 0
      pos = (0.685, -.3875)
      saveStartStop = False
      shape = rectangle
      size = [0.21, 0.005]
      startVal [time (s)] = 0
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    PolygonComponent blink_line_down_ex
      fillColor = white
      opacity = 0
      pos = (0.685, -.4925)
      saveStartStop = False
      shape = rectangle
      size = [0.21, 0.005]
      startVal [time (s)] = 0
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    PolygonComponent blink_line_left_ex
      fillColor = white
      opacity = 0
      pos = (0.5825, -.44)
      saveStartStop = False
      shape = rectangle
      size = [0.005, 0.105]
      startVal [time (s)] = 0
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    PolygonComponent blink_line_right_ex
      fillColor = white
      opacity = 0
      pos = (0.7875, -.44)
      saveStartStop = False
      shape = rectangle
      size = [0.005, 0.105]
      startVal [time (s)] = 0
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  Routine thanks_and_bye
    TextComponent thanks_and_bye_text
      letterHeight = 0.035
      pos = (0, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        Het onderzoek waar je zojuist aan hebt deelgenomen was ontworpen om te begrijpen hoe de samenstelling van woorden onze reacties erop kunnen beïnvloeden, zelfs wanneer deze woorden geen conventionele betekenis hebben. Namen kunnen ons primen voor hoe we iets of iemand anders waarnemen. Verzonnen woorden worden vaak gebruikt als naam voor een product of merk, wat mogelijk kan leiden tot bepaalde percepties over het bedrijf of merk met die naam. Wij zullen analyseren of mensen consistente connotaties hebben met namen of verzonnen woorden en welke eigenschappen van de woorden deze connotaties beïnvloeden (specifieke letters, letter combinaties, analogieën met bestaande woorden, de manier waarop namen gebruikt worden in het Nederlands, etc.). Als je verdere vragen hebt over dit onderzoek, neem dan contact op met de projectleider via g.cassani@tilburguniversity.edu

        Klik op 'afsluiten' om het experiment te sluiten. Loop dan terug naar de onderzoeker, die zal je deelname registreren en je credits toewijzen.

        Nog een fijne dag gewenst!
    ButtonComponent finish_button
      bold = True
      fillColor = [0.12, 0.45, -0.14]
      forceEndRoutine = False
      letterHeight = 0.025
      oncePerClick = False
      pos = [0.685, -0.44]
      save = none
      saveStartStop = False
      size = [0.2, 0.1]
      startVal [time (s)] = 0.01
      text = Afsluiten
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      callback:
        if ability_to_click_next == True:
         continueRoutine = False
    MouseComponent thanks_bye_mouse
      forceEndRoutineOnPress = never
      saveMouseState = on click
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent thanks_bye_code
      Code Type = Auto->JS
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      Begin Routine:
        if thanks_bye_mouse.getPressed()[0] == 1:
            finish_button.fillColor = (0.55, 0.55, 0.55)
            finish_button.updateColors()
            ability_to_click_next = False
      Each Frame:
        if thanks_bye_mouse.getPressed()[0] == 0:
            finish_button.fillColor = (0.12, 0.45, -0.14)
            finish_button.updateColors()
            ability_to_click_next = True
  Routine general_introduction_consent
    TextComponent general_introduction_text
      letterHeight = 0.028
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        Als je de informatiebrief op de vorige pagina hebt doorgenomen en besluit om deel te nemen aan het onderzoek 'Connotaties van Nederlandse namen en verzonnen woorden', begrijp dan dat deelname vrijwillig is, dat je verdere vragen aan de onderzoekers mag stellen voordat je doorgaat met het onderzoek, dat je het recht hebt om je toestemming in te nemen en deelname te beëindigen op ieder moment, dat je ons toestemming geeft je data anoniem te verwerken met volledige vertrouwelijkheid en om het op te slaan voor een periode van 10 jaar en dat je toestemt dat je anonieme antwoorden herbruikt kunnen worden voor onderzoeksdoeleinden.

        De resultaten van dit onderzoek kunnen gepresenteerd worden bij wetenschappelijke of professionele meetings, of kunnen gepubliceerd worden in wetenschappelijke journals. Je persoonlijke informatie zal hierbij niet vrijgegeven worden.

        Om toestemming te geven moet je klikken op de 'IK GEEF TOESTEMMING' knop onderaan de pagina. Enkel als je toestemming gegeven hebt kan je door naar de rest van het experiment. Indien je geen toestemming geeft kan je de survey afsluiten door op de 'Beëndigen' knop te klikken en terug te gaan naar de onderzoeker.
    ButtonComponent next_button_gen_intro
      bold = True
      fillColor = [0.55, 0.55, 0.55]
      forceEndRoutine = False
      letterHeight = 0.025
      pos = [0.685, -0.44]
      save = none
      saveStartStop = False
      size = [0.2, 0.1]
      startVal [time (s)] = 0
      text = Volgende >>
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      callback:
        if consent == True:
            continueRoutine = False
    ButtonComponent stop_button_gen_intro
      bold = True
      fillColor = 0.7020, -1.0000, -1.0000
      forceEndRoutine = False
      letterHeight = 0.025
      pos = [-0.685, -0.44]
      save = none
      saveStartStop = False
      size = [0.2, 0.1]
      startVal [time (s)] = 0
      text = Beëindigen
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      callback:
        thisExp.addData('continue_experiment', False)
        core.quit()
    CodeComponent nextbutton_and_concent_gen_intro_code
      Code Type = Auto->JS
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      Begin Routine:
        next_button_clicked = False
        consent = False

        next_button_gen_intro.fillColor = (0.55, 0.55, 0.55)
        next_button_gen_intro.updateColors()

        checkboxes = [box1]
        clicked = []
        mouseDown = False
        for box in checkboxes:
            box.color = "white"
      Each Frame:
        # make button standard color be grey, turn green
        # when both radio buttons have an answer

        if checkbox_mouse.getPressed()[0] == 0:
            mouseDown = False

        for box in checkboxes:
            if checkbox_mouse.isPressedIn(box) and box.name not in clicked and not mouseDown:
                box.color = "black"
                clicked.append(box.name)
                consent = True
                mouseDown = True
            elif checkbox_mouse.isPressedIn(box) and box.name in clicked and not mouseDown:
                box.color = "white"
                consent = False
                clicked.remove(box.name)
                mouseDown = True


        if consent == True:
            next_button_gen_intro.fillColor = (0.12, 0.45, -0.14)
            next_button_gen_intro.updateColors()
        else:
            next_button_gen_intro.fillColor = (0.55, 0.55, 0.55)
            next_button_gen_intro.updateColors()
      End Routine:
        next_button_clicked = False

        if consent == True:
            thisExp.addData('consent', True)
    PolygonComponent box1
      fillColor = $[1,1,1]
      pos = (-.5, -.3)
      saveStartStop = False
      shape = rectangle
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    MouseComponent checkbox_mouse
      clickable = box1
      forceEndRoutineOnPress = never
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent consent_text
      letterHeight = 0.05
      pos = (-0.16, -0.2935)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = IK GEEF TOESTEMMING
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  Routine example_trial_instructions_2
    TextComponent exampe_trial_instructions_text_2
      letterHeight = 0.05
      pos = (0, 0.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        Op de volgende pagina zullen er enkele voorbeeldvragen gepresenteerd worden, waarbij je de verschillende knoppen uit kan proberen om te zien hoe het precies werkt. Verder zal er feedback gegeven worden over de snelheid waarmee je de vragen hebt ingevuld.

        Hierna volgen er instructies voor de echte vragenlijst.
    CodeComponent ex_trial_inst_code_2
      Code Type = Auto->JS
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      Begin Routine:
        if ex_trial_inst_mouse_2.getPressed()[0] == 1:
            next_button_example_trial_instructions_2.fillColor = (0.55, 0.55, 0.55)
            next_button_example_trial_instructions_2.updateColors()
            ability_to_click_next = False
      Each Frame:
        if ex_trial_inst_mouse_2.getPressed()[0] == 0:
            next_button_example_trial_instructions_2.fillColor = (0.12, 0.45, -0.14)
            next_button_example_trial_instructions_2.updateColors()
            ability_to_click_next = True
    MouseComponent ex_trial_inst_mouse_2
      forceEndRoutineOnPress = never
      saveMouseState = on click
      saveStartStop = False
      startVal [time (s)] = 0.0
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    ButtonComponent next_button_example_trial_instructions_2
      bold = True
      fillColor = [0.12, 0.45, -0.14]
      forceEndRoutine = False
      letterHeight = 0.025
      pos = [0.685, -0.44]
      save = none
      saveStartStop = False
      size = [0.2, 0.1]
      startVal [time (s)] = 0.01
      text = Volgende >>
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      callback:
        if ability_to_click_next == True:
         continueRoutine = False
  Routine example_trial_feedback
    TextComponent feedback_text
      letterHeight = 0.05
      pos = (0, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        Je gemiddelde snelheid per vraag was        seconden.

        Na 7 seconden begint de 'volgende'-knop te knipperen. We adviseren je om de vragen te beantwoorden voor dit punt. Zo blijven je antwoorden gebaseerd op je oorspronkelijke gevoel en ben je op tijd klaar met het experiment.

        Klik op 'volgende' om door te gaan naar verdere instructies voor de echte vragenlijst.
    TextboxComponent feedback_textbox
      autoLog = False
      bold = True
      editable = False
      letterHeight = 0.05
      pos = (0.305, 0.3324)
      saveStartStop = False
      size = (None, None)
      startVal [time (s)] = 0.0
      text [set every repeat] = $(round(total_time_exp/5))
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    ButtonComponent next_button_feedback
      bold = True
      fillColor = [0.12, 0.45, -0.14]
      forceEndRoutine = False
      letterHeight = 0.025
      pos = [0.685, -0.44]
      save = none
      saveStartStop = False
      size = [0.2, 0.1]
      startVal [time (s)] = 0
      text = Volgende >>
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      callback:
        if ability_to_click_next == True:
         continueRoutine = False
    MouseComponent feedback_mouse
      forceEndRoutineOnPress = never
      saveMouseState = on click
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent feedback_code
      Code Type = Auto->JS
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      Begin Routine:
        if feedback_mouse.getPressed()[0] == 1:
            next_button_feedback.fillColor = (0.55, 0.55, 0.55)
            next_button_feedback.updateColors()
            ability_to_click_next = False
      Each Frame:
        if feedback_mouse.getPressed()[0] == 0:
            next_button_feedback.fillColor = (0.12, 0.45, -0.14)
            next_button_feedback.updateColors()
            ability_to_click_next = True
  Routine general_introduction_consent_page1
    ButtonComponent next_button_gen_intro_p1
      bold = True
      callback = continueRoutine = False
      fillColor = [0.12, 0.45, -0.14]
      forceEndRoutine = False
      letterHeight = 0.025
      pos = [0.685, -0.44]
      save = none
      saveStartStop = False
      size = [0.2, 0.1]
      startVal [time (s)] = 0
      text = Volgende >>
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    TextComponent informed_consent_text_p1
      letterHeight = 0.028
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        Beste participant, wij voeren een 30-minuten durend experiment uit, genaamd 'Connotaties van Nederlandse namen en verzonnen woorden'. Ons doel is om kennis te vergaren over de mate waarin mensen consistente connotaties ervaren voor woorden zonder conventionele betekenis, zoals voornamen en verzonnen woorden.

        Je moet goed opletten op alle stimuli en antwoorden met welke ervan het meeste en het minste passen bij een bepaalde associatie. Bijvoorbeeld, je kan 4 verzonnen woorden (die als echte Nederlandse woorden klinken) te zien krijgen samen met een associatie, zoals <vrouwelijk>. Je moet dan het verzonnen woord dat het minst vrouwelijk en het meest vrouwelijk klinkt uitkiezen. Dit experiment is opgedeeld in verschillende blokken: na 64 sets aan vragen is er een pauze.

        Er zijn geen voordelen of risico's verbonden aan het invullen van deze vragenlijst. Je zal course credits krijgen voor je deelname. Je deelname aan deze vragenlijst is vrijwillig, je hebt het recht om deelname te weigeren en je kan je deelname op ieder moment stoppen na aanvang van de vragenlijst zonder verdere uitleg te geven. Als je de vragenlijst begint maar niet compleet afmaakt zal je data worden verwijderd en zal je geen credits ontvangen.

        Onze data zal opgeslagen en versleuteld worden op de PC van de onderzoeker en op de M-drive van Tilburg University voor 10 jaar. In deze periode zullen we de data verwerken en analyseren met standaard pakketten voor statistische analyse (Python en R), de resultaten zullen gepubliceerd worden in wetenschappelijke journals en de data zal mogelijk herbruikt worden voor toekomstige onderzoeken. Je toestemming geldt voor de volledige duratie van het onderzoek. Dit onderzoek was goedgekeurd door de Ethische Toetsingscommissie van Tilburg University. Als je vragen hebt over dit onderzoek, neem contact op met de projectleider Dr. G. Cassani via g.cassani@tilburguniversity.edu

        Bij opmerkingen of klachten over dit onderzoek, neem contact op met de "Research Ethics and Data Management Committee" van de Tilburg School of Humanities and Digital Sciences via tshd.redc@tilburguniversity.edu

        Klik op 'Volgende>>'  om door te gaan naar de volgende pagina. Let op: je kan niet
        meer terug, dus ga alleen door als je de hele informatiebrief hebt doorgenomen.
  Routine control_trial
    CodeComponent control_word_chooser_code
      Code Type = Auto->JS
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      Begin Experiment:
        control_counter = 1
      Begin Routine:
        # start timer

        trial_timer = core.MonotonicClock()

        # acquire the necessary variables

        if control_counter == 1:
            attention1 = 'scuftisch'
            attention2 = 'repomegaren'
            attention3 = 'onthimpend'
            attention4 = 'voorvliemer'
            minste = 'onthimpend'
            meeste = 'repomegaren'

        elif control_counter == 2:
            attention1 = 'Kubon'
            attention2 = 'Oerbebo'
            attention3 = 'Urlwytecoffen'
            attention4 = 'Kniversol'
            minste = 'Oerbebo'
            meeste = 'Kniversol'

        elif control_counter == 3:
            attention1 = 'Lea'
            attention2 = 'Sophia'
            attention3 = 'Naim'
            attention4 = 'Harmanna'
            minste = 'Harmanna'
            meeste = 'Lea'

        else:
            print('something has gone wrong')
      End Routine:
        # create new row to enter info into
        thisExp.nextEntry()

        # creating a word list with the four trial words
        word_list = [attention1, attention2, attention3, attention4]

        # acquiring the best and worst words using the
        # ratings from the radio buttons (-1 because the
        # radio buttons count from 1)
        attention_worst = word_list[int(radio_left_control.getRating() - 1)]
        attention_best = word_list[int(radio_right_control.getRating() - 1)]

        # add all data to the excel sheet
        thisExp.addData('attention1', attention1)
        thisExp.addData('attention2', attention2)
        thisExp.addData('attention3', attention3)
        thisExp.addData('attention4', attention4)

        thisExp.addData('attention_worst_correct', minste)
        thisExp.addData('attention_beste_correct', meeste)

        thisExp.addData('attention_worst_resp', attention_worst)
        thisExp.addData('attention_best_resp', attention_best)

        thisExp.addData('attention_response_time', trial_timer.getTime())

        # increase control counter (for getting correct variables)
        control_counter += 1

        # go to new row for the start of the trials
        thisExp.nextEntry()
    SliderComponent radio_left_control
      color = 0.0000, 0.0000, 0.0000
      forceEndRoutine = False
      granularity = 1
      labels = (1, 2, 3, 4)
      letterHeight = 0.05
      ori = 270
      pos = [-0.5, -0.2]
      saveStartStop = False
      size = [0.3, 0.05]
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = radio
      ticks = (1, 2, 3, 4)
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    SliderComponent radio_right_control
      color = 0.0000, 0.0000, 0.0000
      forceEndRoutine = False
      granularity = 1
      labels = (1, 2, 3, 4)
      letterHeight = 0.05
      ori = 270
      pos = [0.5, -0.2]
      saveStartStop = False
      size = [0.3, 0.05]
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = radio
      ticks = (1, 2, 3, 4)
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    CodeComponent linking_sliders_code_control
      Code Type = Auto->JS
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      Each Frame:
        left_slider_choice = radio_left_control.getRating()
        right_slider_choice = radio_right_control.getRating()

        if len(radio_left_control.getHistory()) > 0 and len(radio_right_control.getHistory()) > 0:
            left_last_choice_time = radio_left_control.getHistory()[-1][1]
            right_last_choice_time = radio_right_control.getHistory()[-1][1]

            if left_slider_choice == right_slider_choice:
                # check whether right radio was interacted with last
                if right_last_choice_time > left_last_choice_time:
                    radio_left_control.reset()
                    radio_right_control.reset()
                    radio_right_control.recordRating(right_slider_choice)
                else:
                    radio_right_control.reset()
                    radio_left_control.reset()
                    radio_left_control.recordRating(left_slider_choice)
    ButtonComponent next_button_control
      bold = True
      fillColor = [0.55, 0.55, 0.55]
      forceEndRoutine = False
      letterHeight = 0.025
      pos = [0.685, -0.44]
      save = none
      saveStartStop = False
      size = [0.2, 0.1]
      startVal [time (s)] = 0
      text = Volgende >>
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      callback:
        if radio_right_control.getRating() and radio_left_control.getRating():
             next_button_clicked = True
    CodeComponent nextbutton_control_code
      Code Type = Auto->JS
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      Begin Routine:
        next_button_clicked = False

        next_button_control.fillColor = (0.55, 0.55, 0.55)
        next_button_control.updateColors()
      Each Frame:
        # make button standard color be grey, turn green
        # when both radio buttons have an answer

        if radio_right_control.getRating() and radio_left_control.getRating():
            next_button_control.fillColor = (0.12, 0.45, -0.14)
            next_button_control.updateColors()
            if next_button_clicked == True:
                continueRoutine = False
            else:
                pass
        else:
            next_button_control.fillColor = (0.55, 0.55, 0.55)
            next_button_control.updateColors()
      End Routine:
        next_button_clicked = False
    TextComponent instruction_text_control
      letterHeight = 0.05
      pos = [0, 0.4]
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Voor deze set aan opties vragen we je om                           bij MINSTE aan te klikken en                           bij MEESTE                     
      wrapWidth = 1.4
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    TextboxComponent minste_var_text_control
      alignment = center-left
      anchor = center-left
      autoLog = False
      bold = True
      editable = False
      letterHeight = 0.05
      pos = [0.265, 0.431]
      saveStartStop = False
      size = [0.1, 0.1]
      startVal [time (s)] = 0.0
      text [set every repeat] = $minste
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    TextboxComponent meeste_var_text_control
      alignment = center-left
      anchor = center-left
      autoLog = False
      bold = True
      editable = False
      letterHeight = 0.05
      pos = [-0.106, 0.374]
      saveStartStop = False
      size = 0.3
      startVal [time (s)] = 0.0
      text [set every repeat] = $meeste
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    PolygonComponent line_below_control
      fillColor = 1,1,1
      lineColor = 1,1,1
      pos = (-0.7, -0.4)
      saveStartStop = False
      shape = line
      size = [1.3, 0.2]
      startVal [time (s)] = 0.0
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    PolygonComponent line_above_control
      fillColor = $[0,0,0] 
      lineColor = $[0,0,0]
      pos = (-0.7, -0.4)
      saveStartStop = False
      shape = line
      size = [0.7, 0.2]
      startVal [time (s)] = 0.0
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    PolygonComponent line_above_2_control
      fillColor = $[0,0,0] 
      lineColor = $[0,0,0]
      pos = (-0.7, -0.4)
      saveStartStop = False
      shape = line
      size = [0.7, 0.2]
      startVal [time (s)] = 0.0
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    PolygonComponent line_above_3_control
      fillColor = $[0,0,0] 
      lineColor = $[0,0,0]
      pos = (-0.7, -0.4)
      saveStartStop = False
      shape = line
      size = [0.7, 0.2]
      startVal [time (s)] = 0.0
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    PolygonComponent line_above_4_control
      fillColor = $[0,0,0] 
      lineColor = $[0,0,0]
      pos = (-0.7, -0.4)
      saveStartStop = False
      shape = line
      size = [0.7, 0.2]
      startVal [time (s)] = 0.0
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    TextboxComponent minst_text_control
      autoLog = False
      bold = True
      editable = False
      letterHeight = 0.05
      pos = (-0.5, 0.05)
      saveStartStop = False
      size = (None, None)
      startVal [time (s)] = 0.0
      text = Minste
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    TextboxComponent meest_text_control
      autoLog = False
      bold = True
      editable = False
      letterHeight = 0.05
      pos = (0.5, 0.05)
      saveStartStop = False
      size = (None, None)
      startVal [time (s)] = 0.0
      text = Meeste
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    TextComponent word1_var_text_control
      letterHeight = 0.05
      pos = (0, -.34)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $attention1
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    TextComponent word2_var_text_control
      letterHeight = 0.05
      pos = (0, -0.24)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $attention2
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    TextComponent word3_var_text_control
      letterHeight = 0.05
      pos = (0, -.14)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $attention3
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    TextComponent word4_var_text_control
      letterHeight = 0.05
      pos = (0, -.04)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $attention4
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    TextboxComponent progress_tracker_variable_text_control
      anchor = center-right
      autoLog = False
      bold = False
      editable = False
      letterHeight = 0.05
      pos = (-0.36, -0.47)
      saveStartStop = False
      size = (None, None)
      startVal [time (s)] = 0.0
      text [set every repeat] = 1
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    TextboxComponent progress_tracker_text_control
      anchor = center-left
      autoLog = False
      bold = False
      editable = False
      letterHeight = 0.05
      pos = (-1.08, -0.47)
      saveStartStop = False
      size = (None, None)
      startVal [time (s)] = 0.0
      text = / 65
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    CodeComponent blinking_bw_trial_code_control
      Code Type = Auto->JS
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      Begin Routine:
        timer = core.CountdownTimer(7)
      Each Frame:
        if timer.getTime() < 0.5:
            if round(timer.getTime()) % 2 == 0:
                blink_line_up_bw_control.opacity = 1
                blink_line_down_bw_control.opacity = 1
                blink_line_left_bw_control.opacity = 1
                blink_line_right_bw_control.opacity = 1
                blink_line_up_bw_control.updateOpacity()
                blink_line_down_bw_control.updateOpacity()
                blink_line_left_bw_control.updateOpacity()
                blink_line_right_bw_control.updateOpacity()
            else:
                blink_line_up_bw_control.opacity = 0
                blink_line_down_bw_control.opacity = 0
                blink_line_left_bw_control.opacity = 0
                blink_line_right_bw_control.opacity = 0
                blink_line_up_bw_control.updateOpacity()
                blink_line_down_bw_control.updateOpacity()
                blink_line_left_bw_control.updateOpacity()
                blink_line_right_bw_control.updateOpacity()
      End Routine:
        # reset blinkers
        blink_line_up_bw_control.opacity = 0
        blink_line_down_bw_control.opacity = 0
        blink_line_left_bw_control.opacity = 0
        blink_line_right_bw_control.opacity = 0
        blink_line_up_bw_control.updateOpacity()
        blink_line_down_bw_control.updateOpacity()
        blink_line_left_bw_control.updateOpacity()
        blink_line_right_bw_control.updateOpacity()
    PolygonComponent blink_line_up_bw_control
      fillColor = white
      opacity [set every repeat] = 0
      pos = (0.685, -.3875)
      saveStartStop = False
      shape = rectangle
      size = [0.21, 0.005]
      startVal [time (s)] = 0
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    PolygonComponent blink_line_down_bw_control
      fillColor = white
      opacity [set every repeat] = 0
      pos = (0.685, -.4925)
      saveStartStop = False
      shape = rectangle
      size = [0.21, 0.005]
      startVal [time (s)] = 0
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    PolygonComponent blink_line_left_bw_control
      fillColor = white
      opacity [set every repeat] = 0
      pos = (0.5825, -.44)
      saveStartStop = False
      shape = rectangle
      size = [0.005, 0.105]
      startVal [time (s)] = 0
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    PolygonComponent blink_line_right_bw_control
      fillColor = white
      opacity [set every repeat] = 0
      pos = (0.7875, -.44)
      saveStartStop = False
      shape = rectangle
      size = [0.005, 0.105]
      startVal [time (s)] = 0
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Flow
  Routine block_selector
  Routine general_introduction_consent_page1
  Routine general_introduction_consent
  Routine example_trial_instructions
  Routine example_trial_instructions_2
  LoopInitiator example_trial_loop loopType="TrialHandler"
    conditionsFile = example_trials.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'option1': 'oorlog', 'option2': 'boterham', 'option3': 'vrede', 'option4': 'straatlantaarn'},
      {'option1': 'beker', 'option2': 'internet', 'option3': 'boos', 'option4': 'lief'},
      {'option1': 'klein', 'option2': 'mooi', 'option3': 'groot', 'option4': 'lelijk'},
      {'option1': 'schild', 'option2': 'spatel', 'option3': 'pan', 'option4': 'zwaard'},
      {'option1': 'spelen', 'option2': 'helpen', 'option3': 'bedriegen', 'option4': 'sporten'}]
    Routine example_trial
  LoopTerminator example_trial_loop
  Routine example_trial_feedback
  LoopInitiator wordtype_block loopType="TrialHandler"
    conditionsFile = final_survey_trials.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [{'blocks': 'C:/Users/jooss004/Documents/traineeship_project/word_norms_survey/stimuli_creation/data/trials/final_survey/nonwords_bestworst_final_trials.xlsx', 'wordtype_instructions': 'nepwoorden'},
      {'blocks': 'C:\\Users\\jooss004\\Documents\\traineeship_project\\word_norms_survey\\stimuli_creation\\data\\trials\\final_survey\\company_bestworst_final_trials.xlsx', 'wordtype_instructions': 'bedrijfsnamen'},
      {'blocks': 'C:\\Users\\jooss004\\Documents\\traineeship_project\\word_norms_survey\\stimuli_creation\\data\\trials\\final_survey\\dutch_names_bestworst_final_trials.xlsx', 'wordtype_instructions': 'namen'}]
    Routine selftimed_pause
    Routine block_instructions
    Routine control_trial
    LoopInitiator within_block_trials loopType="TrialHandler"
      Selected rows = $trial_rows
      conditionsFile = $blocks
      loopType = sequential
      nReps = 1
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      Routine bestworst_trial
      Routine pause_tenthsecond
    LoopTerminator within_block_trials
  LoopTerminator wordtype_block
  Routine thanks_and_bye
