PsychoPy2experiment version="2022.2.5"
Settings
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  expName = pilot_survey
  keyboardBackend = ioHub
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Routines
  Routine bestworst_trial
    SliderComponent radio_left
      color = 0.0000, 0.0000, 0.0000
      forceEndRoutine = False
      granularity = 1
      labels = (1, 2, 3, 4)
      letterHeight = 0.05
      ori = 270
      pos = [-0.5, -0.2]
      saveStartStop = False
      size = [0.3, 0.05]
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = radio
      ticks = (1, 2, 3, 4)
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    SliderComponent radio_right
      color = 0.0000, 0.0000, 0.0000
      forceEndRoutine = False
      granularity = 1
      labels = (1, 2, 3, 4)
      letterHeight = 0.05
      ori = 270
      pos = [0.5, -0.2]
      saveStartStop = False
      size = [0.3, 0.05]
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = radio
      ticks = (1, 2, 3, 4)
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    CodeComponent linking_sliders_code
      Code Type = Auto->JS
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      Each Frame:
        left_slider_choice = radio_left.getRating()
        right_slider_choice = radio_right.getRating()

        if len(radio_left.getHistory()) > 0 and len(radio_right.getHistory()) > 0:
            left_last_choice_time = radio_left.getHistory()[-1][1]
            right_last_choice_time = radio_right.getHistory()[-1][1]

            if left_slider_choice == right_slider_choice:
                # check whether right radio was interacted with last
                if right_last_choice_time > left_last_choice_time:
                    radio_left.reset()
                    radio_right.reset()
                    radio_right.recordRating(right_slider_choice)
                else:
                    radio_right.reset()
                    radio_left.reset()
                    radio_left.recordRating(left_slider_choice)
    ButtonComponent next_button_trials
      bold = True
      fillColor = [0.55, 0.55, 0.55]
      forceEndRoutine = False
      letterHeight = 0.025
      pos = [0.77, -0.44]
      size = [0.2, 0.1]
      startVal [time (s)] = 0
      text = Volgende >>
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      callback:
        if radio_right.getRating() and radio_left.getRating():
             next_button_clicked = True
    CodeComponent nextbutton_trials_code
      Code Type = Auto->JS
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      Begin Routine:
        next_button_clicked = False

        next_button_trials.fillColor = (0.55, 0.55, 0.55)
        next_button_trials.updateColors()
      Each Frame:
        # make button standard color be grey, turn green
        # when both radio buttons have an answer

        if radio_right.getRating() and radio_left.getRating():
            next_button_trials.fillColor = (0.12, 0.45, -0.14)
            next_button_trials.updateColors()
            if next_button_clicked == True:
                continueRoutine = False
            else:
                pass
        else:
            next_button_trials.fillColor = (0.55, 0.55, 0.55)
            next_button_trials.updateColors()
      End Routine:
        next_button_clicked = False
    TextComponent instruction_text
      letterHeight = 0.05
      pos = [0, 0.35]
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.3
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      text:
        Welke van de vier                   associeer je het MINSTE
        en het MEESTE met
    TextboxComponent wordtype_var_text
      alignment = center-left
      anchor = center-left
      autoLog = False
      bold = True
      editable = False
      letterHeight = 0.05
      pos = [-0.18, 0.385]
      saveStartStop = False
      size = [0.1, 0.1]
      startVal [time (s)] = 0.0
      text [set every repeat] = $wordtype
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    TextboxComponent association_var_text
      alignment = center-left
      anchor = center-left
      autoLog = False
      bold = True
      editable = False
      letterHeight = 0.05
      pos = [0.07, 0.316]
      saveStartStop = False
      size = 0.3
      startVal [time (s)] = 0.0
      text [set every repeat] = $association
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    PolygonComponent line_below
      fillColor = 1,1,1
      lineColor = 1,1,1
      pos = (-0.7, -0.4)
      saveStartStop = False
      shape = line
      size = [1.3, 0.2]
      startVal [time (s)] = 0.0
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    PolygonComponent line_above
      fillColor = $[0,0,0] 
      lineColor = $[0,0,0]
      pos = (-0.7, -0.4)
      saveStartStop = False
      shape = line
      size = [0.7, 0.2]
      startVal [time (s)] = 0.0
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    PolygonComponent line_above_2
      fillColor = $[0,0,0] 
      lineColor = $[0,0,0]
      pos = (-0.7, -0.4)
      saveStartStop = False
      shape = line
      size = [0.7, 0.2]
      startVal [time (s)] = 0.0
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    PolygonComponent line_above_3
      fillColor = $[0,0,0] 
      lineColor = $[0,0,0]
      pos = (-0.7, -0.4)
      saveStartStop = False
      shape = line
      size = [0.7, 0.2]
      startVal [time (s)] = 0.0
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    PolygonComponent line_above_4
      fillColor = $[0,0,0] 
      lineColor = $[0,0,0]
      pos = (-0.7, -0.4)
      saveStartStop = False
      shape = line
      size = [0.7, 0.2]
      startVal [time (s)] = 0.0
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    TextboxComponent minst_text
      autoLog = False
      bold = True
      editable = False
      letterHeight = 0.05
      pos = (-0.5, 0.05)
      saveStartStop = False
      size = (None, None)
      startVal [time (s)] = 0.0
      text = Minste
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    TextboxComponent meest_text
      autoLog = False
      bold = True
      editable = False
      letterHeight = 0.05
      pos = (0.5, 0.05)
      saveStartStop = False
      size = (None, None)
      startVal [time (s)] = 0.0
      text = Meeste
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    TextComponent word1_var_text
      letterHeight = 0.05
      pos = (0, -.34)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $option1
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    TextComponent word2_var_text
      letterHeight = 0.05
      pos = (0, -0.24)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $option2
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    TextComponent word3_var_text
      letterHeight = 0.05
      pos = (0, -.14)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $option3
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    TextComponent word4_var_text
      letterHeight = 0.05
      pos = (0, -.04)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $option4
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    CodeComponent saving_variables_code
      Code Type = Auto->JS
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      End Routine:
        # creating a word list with the four trial words
        word_list = [option1, option2, option3, option4]

        # acquiring the best and worst words using the
        # ratings from the radio buttons (-1 because the
        # radio buttons count from 1)
        worst = word_list[int(radio_left.getRating() - 1)]
        best = word_list[int(radio_right.getRating() - 1)]

        # add data to the excel sheet
        thisExp.addData('worst', worst)
        thisExp.addData('best', best)
  Routine stimuli_loader
  Routine selftimed_pause
    CodeComponent selftimed_pause_code
      Code Type = Auto->JS
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      Begin Routine:
        if wordtype_instructions == 'voornamen':
            continueRoutine = False
        else:
            pass

        if selftimed_pause_mouse.getPressed()[0] == 1:
            next_button_selftimed_pause.fillColor = (0.55, 0.55, 0.55)
            next_button_selftimed_pause.updateColors()
            ability_to_click_next = False
      Each Frame:
        if selftimed_pause_mouse.getPressed()[0] == 0:
            next_button_selftimed_pause.fillColor = (0.12, 0.45, -0.14)
            next_button_selftimed_pause.updateColors()
            ability_to_click_next = True
    TextComponent selftimed_pause_text
      letterHeight = 0.05
      pos = (0, 0.06)
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.7
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      text:
        Soms kan een survey invullen erg vermoeiend werken. Om vermoeidheid tegen te gaan bieden we hier de mogelijkheid om een pauze te nemen. Deze pauze kan zo lang duren als je zelf wilt.

        Het is voor dit experiment toegestaan om tijdens deze pauzes je telefoon er bij te pakken.

        Om door te gaan naar de rest van het experiment, klik op de 'volgende'-knop.
    ButtonComponent next_button_selftimed_pause
      bold = True
      fillColor = [0.12, 0.45, -0.14]
      forceEndRoutine = False
      letterHeight = 0.025
      pos = [0.77, -0.44]
      save = none
      saveStartStop = False
      size = [0.2, 0.1]
      startVal [time (s)] = 0
      text = Volgende >>
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      callback:
        if ability_to_click_next == True:
         continueRoutine = False
    MouseComponent selftimed_pause_mouse
      forceEndRoutineOnPress = never
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine block_instructions
    TextComponent block_instruction_text
      letterHeight = 0.05
      pos = (0, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.7
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      text:
        Je krijgt straks 16 verschillende sets van 4                               te zien. Verder geldt er voor iedere individuele set een specifieke, willekeurig gekozen associatie. Voor iedere set van 4                                  vragen we je om aan te geven welke je hiervan het MEESTE en het MINSTE vind passen bij de associatie.

        Let op: de associaties worden willekeurig gekozen, lees deze dus goed voor het beantwoorden van de vragen.
    ButtonComponent next_button_block_instructions
      bold = True
      fillColor = [0.12, 0.45, -0.14]
      forceEndRoutine = False
      letterHeight = 0.025
      pos = [0.77, -0.44]
      save = none
      saveStartStop = False
      size = [0.2, 0.1]
      startVal [time (s)] = 0
      text = Volgende >>
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      callback:
        if ability_to_click_next == True:
         continueRoutine = False
    TextboxComponent wordtype_textbox_instruction_block_1
      alignment = center-left
      anchor = center-left
      autoLog = False
      bold = True
      editable = False
      letterHeight = 0.05
      pos = (0.130, 0.3413)
      saveStartStop = False
      size = (None, None)
      startVal [time (s)] = 0.0
      text [set every repeat] = $wordtype_instructions
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    TextboxComponent wordtype_textbox_instruction_block_2
      alignment = center-left
      anchor = center-left
      autoLog = False
      bold = True
      editable = False
      letterHeight = 0.05
      pos = (-.07, 0.2033)
      saveStartStop = False
      size = (None, None)
      startVal [time (s)] = 0.0
      text [set every repeat] = $wordtype_instructions
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    MouseComponent block_instr_mouse
      forceEndRoutineOnPress = never
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    CodeComponent block_instr_code
      Code Type = Auto->JS
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      Begin Routine:
        if block_instr_mouse.getPressed()[0] == 1:
            next_button_block_instructions.fillColor = (0.55, 0.55, 0.55)
            next_button_block_instructions.updateColors()
            ability_to_click_next = False
      Each Frame:
        if block_instr_mouse.getPressed()[0] == 0:
            next_button_block_instructions.fillColor = (0.12, 0.45, -0.14)
            next_button_block_instructions.updateColors()
            ability_to_click_next = True
  Routine block_selector
    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        # I don't know how to do this yet, but, for every
        # trials file that I load, I have to select only
        # the 16 trials that accord to each participant's
        # assigned number

        p_num = int(expInfo['participant'])


        row_start = (p_num-1) * 16
        row_end = ((p_num-1) * 16) + 16
        trial_rows = str(row_start) + ':' + str(row_end)
  Routine pause_tenthsecond
    TextComponent text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
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  Routine general_introduction
    TextComponent general_introduction_text
      letterHeight = 0.05
      pos = (0, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.7
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      text:
        Welkom bij ons experiment. Om door te gaan moet je toestemming geven dat we je data kunnen opslaan en gebruiken voor verdere analyse. Klik hiervoor op de 'IK GEEF TOESTEMMING' knop onderaan de pagina. Enkel als je toestemming gegeven hebt kan je door naar de rest van het experiment. Indien je geen toestemming geeft kan je de survey afsluiten door op de 'escape' knop te klikken en terug te gaan naar de onderzoeker.

        Voor verdere vragen over het onderzoek, mail: a.y.joosse@uu.nl
    ButtonComponent next_button_gen_intro
      bold = True
      fillColor = [0.55, 0.55, 0.55]
      forceEndRoutine = False
      letterHeight = 0.025
      pos = [0.77, -0.44]
      save = none
      saveStartStop = False
      size = [0.2, 0.1]
      startVal [time (s)] = 0
      text = Volgende >>
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      callback:
        if consent == True:
            continueRoutine = False
    CodeComponent nextbutton_and_concent_gen_intro_code
      Code Type = Auto->JS
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      Begin Routine:
        next_button_clicked = False
        consent = False

        next_button_gen_intro.fillColor = (0.55, 0.55, 0.55)
        next_button_gen_intro.updateColors()

        checkboxes = [box1]
        clicked = []
        mouseDown = False
        for box in checkboxes:
            box.color = "white"
      Each Frame:
        # make button standard color be grey, turn green
        # when both radio buttons have an answer

        if checkbox_mouse.getPressed()[0] == 0:
            mouseDown = False

        for box in checkboxes:
            if checkbox_mouse.isPressedIn(box) and box.name not in clicked and not mouseDown:
                box.color = "black"
                clicked.append(box.name)
                consent = True
                mouseDown = True
            elif checkbox_mouse.isPressedIn(box) and box.name in clicked and not mouseDown:
                box.color = "white"
                consent = False
                clicked.remove(box.name)
                mouseDown = True


        if consent == True:
            next_button_gen_intro.fillColor = (0.12, 0.45, -0.14)
            next_button_gen_intro.updateColors()
        else:
            next_button_gen_intro.fillColor = (0.55, 0.55, 0.55)
            next_button_gen_intro.updateColors()
      End Routine:
        next_button_clicked = False

        if consent == True:
            thisExp.addData('consent', True)
    PolygonComponent box1
      fillColor = $[1,1,1]
      pos = (-.5, -.3)
      saveStartStop = False
      shape = rectangle
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    MouseComponent checkbox_mouse
      clickable = box1
      forceEndRoutineOnPress = never
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent consent_text
      letterHeight = 0.05
      pos = (-0.16, -0.2935)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = IK GEEF TOESTEMMING
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  Routine example_trial_instructions
    TextComponent example_trial_instruction_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.7
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      text:
        In deze survey zal je drie blokken met elk 16 vragen te zien krijgen, met tussendoor een pauze. Elke individuele vraag betreft vier woorden of namen waaruit je één minst en één meest passende optie moet kiezen voor een willekeurige associatie. Let dus goed op bij iedere nieuwe vraag welke associatie willekeurig gekozen is.

        Op de volgende pagina zal er een voorbeeld gepresenteerd worden, waarbij je de verschillende knoppen uit kan proberen om te zien hoe het precies werkt. Hierna volgen er instructies voor de echte vragenlijst.
    ButtonComponent next_button_example_trial_instructions
      bold = True
      fillColor = [0.12, 0.45, -0.14]
      forceEndRoutine = False
      letterHeight = 0.025
      pos = [0.77, -0.44]
      saveStartStop = False
      size = [0.2, 0.1]
      startVal [time (s)] = 0.01
      text = Volgende >>
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      callback:
        if ability_to_click_next == True:
         continueRoutine = False
    CodeComponent ex_trial_inst_code
      Code Type = Auto->JS
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      Begin Routine:
        if ex_trial_inst_mouse.getPressed()[0] == 1:
            next_button_example_trial_instructions.fillColor = (0.55, 0.55, 0.55)
            next_button_example_trial_instructions.updateColors()
            ability_to_click_next = False
      Each Frame:
        if ex_trial_inst_mouse.getPressed()[0] == 0:
            next_button_example_trial_instructions.fillColor = (0.12, 0.45, -0.14)
            next_button_example_trial_instructions.updateColors()
            ability_to_click_next = True
    MouseComponent ex_trial_inst_mouse
      forceEndRoutineOnPress = never
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine example_trial
    SliderComponent radio_left_ex
      color = 0.0000, 0.0000, 0.0000
      flip = True
      forceEndRoutine = False
      granularity = 1
      labels = (1, 2, 3, 4)
      letterHeight = 0.05
      ori = 270
      pos = [-0.5, -0.2]
      saveStartStop = False
      size = [0.3, 0.05]
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = radio
      ticks = (1, 2, 3, 4)
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    SliderComponent radio_right_ex
      color = 0.0000, 0.0000, 0.0000
      flip = True
      forceEndRoutine = False
      granularity = 1
      labels = (1, 2, 3, 4)
      letterHeight = 0.05
      ori = 270
      pos = [0.5, -0.2]
      saveStartStop = False
      size = [0.3, 0.05]
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = radio
      ticks = (1, 2, 3, 4)
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    CodeComponent linking_sliders_code_ex
      Code Type = Auto->JS
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      Each Frame:
        left_slider_choice = radio_left_ex.getRating()
        right_slider_choice = radio_right_ex.getRating()

        if len(radio_left_ex.getHistory()) > 0 and len(radio_right_ex.getHistory()) > 0:
            left_last_choice_time = radio_left_ex.getHistory()[-1][1]
            right_last_choice_time = radio_right_ex.getHistory()[-1][1]

            if left_slider_choice == right_slider_choice:
                # check whether right radio was interacted with last
                if right_last_choice_time > left_last_choice_time:
                    radio_left_ex.reset()
                    radio_right_ex.reset()
                    radio_right_ex.recordRating(right_slider_choice)
                else:
                    radio_right_ex.reset()
                    radio_left_ex.reset()
                    radio_left_ex.recordRating(left_slider_choice)
    ButtonComponent next_button_trials_ex
      bold = True
      fillColor = [0.55, 0.55, 0.55]
      forceEndRoutine = False
      letterHeight = 0.025
      pos = [0.77, -0.44]
      size = [0.2, 0.1]
      startVal [time (s)] = 0
      text = Volgende >>
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      callback:
        if radio_right_ex.getRating() and radio_left_ex.getRating():
             next_button_clicked = True
    CodeComponent nextbutton_trials_code_ex
      Code Type = Auto->JS
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      Begin Routine:
        next_button_clicked = False

        next_button_trials_ex.fillColor = (0.55, 0.55, 0.55)
        next_button_trials_ex.updateColors()
      Each Frame:
        # make button standard color be grey, turn green
        # when both radio buttons have an answer

        if radio_right_ex.getRating() and radio_left_ex.getRating():
            next_button_trials_ex.fillColor = (0.12, 0.45, -0.14)
            next_button_trials_ex.updateColors()
            if next_button_clicked == True:
                continueRoutine = False
            else:
                pass
        else:
            next_button_trials_ex.fillColor = (0.55, 0.55, 0.55)
            next_button_trials_ex.updateColors()
      End Routine:
        next_button_clicked = False
    TextComponent instruction_text_ex
      letterHeight = 0.05
      pos = [0, 0.35]
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.3
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      text:
        Welke van de vier                   associeer je het MINSTE
        en het MEESTE met
    TextboxComponent wordtype_var_text_ex
      alignment = center-left
      anchor = center-left
      autoLog = False
      bold = True
      editable = False
      letterHeight = 0.05
      pos = [-0.18, 0.385]
      saveStartStop = False
      size = [0.1, 0.1]
      startVal [time (s)] = 0.0
      text [set every repeat] = woorden
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    TextboxComponent association_var_text_ex
      alignment = center-left
      anchor = center-left
      autoLog = False
      bold = True
      editable = False
      letterHeight = 0.05
      pos = [0.07, 0.316]
      saveStartStop = False
      size = 0.3
      startVal [time (s)] = 0.0
      text [set every repeat] = kwaadaardigheid
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    PolygonComponent line_below_ex
      fillColor = 1,1,1
      lineColor = 1,1,1
      pos = (-0.7, -0.4)
      saveStartStop = False
      shape = line
      size = [1.3, 0.2]
      startVal [time (s)] = 0.0
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    PolygonComponent line_above_ex
      fillColor = $[0,0,0] 
      lineColor = $[0,0,0]
      pos = (-0.7, -0.4)
      saveStartStop = False
      shape = line
      size = [0.7, 0.2]
      startVal [time (s)] = 0.0
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    PolygonComponent line_above_2_ex
      fillColor = $[0,0,0] 
      lineColor = $[0,0,0]
      pos = (-0.7, -0.4)
      saveStartStop = False
      shape = line
      size = [0.7, 0.2]
      startVal [time (s)] = 0.0
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    PolygonComponent line_above_3_ex
      fillColor = $[0,0,0] 
      lineColor = $[0,0,0]
      pos = (-0.7, -0.4)
      saveStartStop = False
      shape = line
      size = [0.7, 0.2]
      startVal [time (s)] = 0.0
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    PolygonComponent line_above_4_ex
      fillColor = $[0,0,0] 
      lineColor = $[0,0,0]
      pos = (-0.7, -0.4)
      saveStartStop = False
      shape = line
      size = [0.7, 0.2]
      startVal [time (s)] = 0.0
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    TextboxComponent minst_text_ex
      autoLog = False
      bold = True
      editable = False
      letterHeight = 0.05
      pos = (-0.5, 0.05)
      saveStartStop = False
      size = (None, None)
      startVal [time (s)] = 0.0
      text = Minste
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    TextboxComponent meest_text_ex
      autoLog = False
      bold = True
      editable = False
      letterHeight = 0.05
      pos = (0.5, 0.05)
      saveStartStop = False
      size = (None, None)
      startVal [time (s)] = 0.0
      text = Meeste
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    TextComponent word1_var_text_ex
      letterHeight = 0.05
      pos = (0, -.04)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = oorlog
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    TextComponent word2_var_text_ex
      letterHeight = 0.05
      pos = (0, -0.14)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = boterham
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    TextComponent word3_var_text_ex
      letterHeight = 0.05
      pos = (0, -.24)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = vrede
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    TextComponent word4_var_text_ex
      letterHeight = 0.05
      pos = (0, -.34)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = straatlantaarn
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  Routine thanks_and_bye
    TextComponent thanks_and_bye_text
      letterHeight = 0.05
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.7
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      text:
        Je hebt het einde bereikt van het experiment! Dankjewel voor je deelname aan het onderzoek. Je kan onderaan de pagina klikken op 'AFSLUITEN' en terug gaan naar de onderzoeker, die je deelname zal registreren en je credits toe zal kennen.

        Nog een fijne dag gewenst!
    ButtonComponent finish_button
      bold = True
      fillColor = [0.12, 0.45, -0.14]
      forceEndRoutine = False
      letterHeight = 0.025
      oncePerClick = False
      pos = [0.77, -0.44]
      saveStartStop = False
      size = [0.2, 0.1]
      startVal [time (s)] = 0.01
      text = Afsluiten
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      callback:
        if ability_to_click_next == True:
         continueRoutine = False
    MouseComponent thanks_bye_mouse
      forceEndRoutineOnPress = never
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    CodeComponent thanks_bye_code
      Code Type = Auto->JS
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      Begin Routine:
        if thanks_bye_mouse.getPressed()[0] == 1:
            finish_button.fillColor = (0.55, 0.55, 0.55)
            finish_button.updateColors()
            ability_to_click_next = False
      Each Frame:
        if thanks_bye_mouse.getPressed()[0] == 0:
            finish_button.fillColor = (0.12, 0.45, -0.14)
            finish_button.updateColors()
            ability_to_click_next = True
Flow
  Routine block_selector
  Routine general_introduction
  Routine pause_tenthsecond
  Routine example_trial_instructions
  Routine pause_tenthsecond
  Routine example_trial
  Routine pause_tenthsecond
  LoopInitiator wordtype_block loopType="TrialHandler"
    conditionsFile = pilot_trials_blocks.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [{'blocks': 'C:\\Users\\jooss004\\Documents\\traineeship_project\\survey\\stimuli\\trials\\dutch_bestworst_pilot_trials.xlsx', 'wordtype_instructions': 'voornamen'},
      {'blocks': 'C:\\Users\\jooss004\\Documents\\traineeship_project\\survey\\stimuli\\trials\\company_bestworst_pilot_trials.xlsx', 'wordtype_instructions': 'bedrijfsnamen'},
      {'blocks': 'C:\\Users\\jooss004\\Documents\\traineeship_project\\survey\\stimuli\\trials\\\nonwords_bestworst_pilot_trials.xlsx', 'wordtype_instructions': 'nepwoorden'}]
    Routine selftimed_pause
    Routine pause_tenthsecond
    Routine block_instructions
    LoopInitiator within_block_trials loopType="TrialHandler"
      Selected rows = $trial_rows
      conditionsFile = $blocks
      loopType = sequential
      nReps = 1
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      Routine bestworst_trial
      Routine pause_tenthsecond
    LoopTerminator within_block_trials
    Routine pause_tenthsecond
  LoopTerminator wordtype_block
  Routine thanks_and_bye
